PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  color = $[1,1,1]
  expName = smdt_rhythm
  logging level = debug
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Routines
  Routine trial
    SoundComponent rhythm_sound_first
      saveStartStop = False
      sound [set every repeat] = $rhythm_first
      startVal [time (s)] = 0
      stopVal [duration (s)] = $rhythm_first_time
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    SoundComponent rhythm_sound_second
      saveStartStop = False
      sound [set every repeat] = $rhythm_second
      startVal [time (s)] = $rhythm_first_time+0.9
      stopVal [duration (s)] = $rhythm_first_time+0.9+rhythm_second_time
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    PolygonComponent rhythm_rect_same
      fillColor = $[0,0,0]
      pos = (8, 0)
      saveStartStop = False
      shape = rectangle
      size = (9, 3)
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent rhythm_rect_different
      fillColor = $[0,0,0]
      pos = (-8, 0.0)
      saveStartStop = False
      shape = rectangle
      size = (9, 3)
      startVal [time (s)] = 0.0
      units = deg
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    TextComponent text_trial_same
      letterHeight = 1.4
      pos = (8, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Samma
      units = deg
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    TextComponent text_trial_different
      letterHeight = 1.4
      pos = (-8, 0.0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Olika
      units = deg
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    CodeComponent code_trial
      Code Type = Py
      Before Experiment:
        SAME_COLOR = [-0.5,0.7,-0.5]
        DIFFERENT_COLOR = [0.7,-0.5,-0.5]
      Begin Routine:
        second_rhythm_start = rhythm_first_time+0.9
        mouse_start = second_rhythm_start+rhythm_second_time
        rhythm_rect_same.fillColor = [0, 0, 0]
        rhythm_rect_different.fillColor = [0, 0, 0]
        grey_colors = True

        # check if 1st and 2nd rhythm .wav are the same
        if rhythm_first == rhythm_second:
            correct_rect_name = rhythm_rect_same.name
            same_rhythm = 1
        else:
            correct_rect_name = rhythm_rect_different.name
            same_rhythm = 0

        # get trial start time, for export to .csv file
        trial_start_time = tThisFlipGlobal + 0
      Each Frame:
        # if second rhythm starts now and rectangles are still in grey
        if tThisFlip >= second_rhythm_start-frameTolerance and grey_colors:
            rhythm_rect_same.fillColor = SAME_COLOR
            rhythm_rect_different.fillColor = DIFFERENT_COLOR
            grey_colors = False

        # if mouse/instruction should start now and mouse isn't already started
        if tThisFlip >= mouse_start-frameTolerance and mouse_trial.status != STARTED:
            mouse_trial.status = STARTED
            text_trial_instruction.setAutoDraw(True)
      End Routine:
        # get trial duration, for export to .csv file
        trial_duration = tThisFlipGlobal - trial_start_time

        # store name of clicked rectangle, in order to set color of inter trial
        # rectangles
        clicked_rect_name = mouse_trial.clicked_name[0]

        # check if response was correct or not, converting boolean to integer
        # (1 for correct, 0 for incorrect response) for more compact and
        # familiar data representation
        response_correct = int(correct_rect_name == clicked_rect_name)

        # save the data
        trials.addData('trial_start_time', trial_start_time)
        trials.addData('trial_duration', trial_duration)
        trials.addData('same_rhythm', same_rhythm)
        trials.addData('correct_name', correct_rect_name)
        trials.addData('response_correct', response_correct)
    MouseComponent mouse_trial
      clickable = rhythm_rect_same, rhythm_rect_different
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 9999
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    TextComponent text_trial_instruction
      color = black
      letterHeight = 0.8
      pos = (0, -8)
      saveStartStop = False
      startVal [time (s)] = 9999
      text = Klicka på vänster ruta om du tror att två olika rytmer spelades. Klicka på höger ruta om du tror att samma rytm spelades två gånger.
      units = deg
      wrapWidth = 20
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  Routine instructions
    MouseComponent mouse_instructions
      clickable = text_instructions_start
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 2.5
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    TextComponent text_instructions
      color = black
      letterHeight = 1
      saveStartStop = False
      startVal [time (s)] = 0
      units = deg
      wrapWidth = 30
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      text:
        Du kommer i varje uppgift att höra två rytmer spelas.

        I varje uppgift ska du avgöra om det är samma rytm som spelas två gånger, eller om rytmerna är olika. Du använder vänster musknapp för att ge dina svar.

        Fortsätt tills du ser ett slutmeddelande. Klicka med vänster musknapp på texten nedanför för att påbörja testet.
    TextComponent text_instructions_start
      color = black
      letterHeight = 0.5
      pos = (0, -10)
      saveStartStop = False
      startVal [time (s)] = 0
      text = Klicka här när du läst klart och är redo
      units = deg
      wrapWidth = 30
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  Routine inter_trial_highlighted
    PolygonComponent rect_same_inter_highlighted
      fillColor = $[0,0,0]
      pos = (8, 0)
      saveStartStop = False
      shape = rectangle
      size = (9, 3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = deg
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    PolygonComponent rect_different_inter_highlighted
      fillColor = $[0,0,0]
      pos = (-8, 0.0)
      saveStartStop = False
      shape = rectangle
      size = (9, 3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = deg
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    TextComponent text_same_inter_highlighted
      letterHeight = 1.4
      pos = (8, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Samma
      units = deg
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    TextComponent text_different_inter_highlighted
      letterHeight = 1.4
      pos = (-8, 0.0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Olika
      units = deg
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    CodeComponent code
      Code Type = Py
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      Before Experiment:
        # define clicked response box color
        CLICKED_COLOR = [1, 0.3, -1]
      Begin Routine:
        if clicked_rect_name == 'rhythm_rect_same':
            rect_same_inter_highlighted.fillColor = CLICKED_COLOR
            rect_different_inter_highlighted.fillColor = DIFFERENT_COLOR
        else:
            rect_different_inter_highlighted.fillColor = CLICKED_COLOR
            rect_same_inter_highlighted.fillColor = SAME_COLOR
  Routine inter_trial_grey
    PolygonComponent rect_same_inter_grey
      fillColor = $[0,0,0]
      pos = (8, 0)
      saveStartStop = False
      shape = rectangle
      size = (9, 3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = deg
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    PolygonComponent rect_different_inter_grey
      fillColor = $[0,0,0]
      pos = (-8, 0.0)
      saveStartStop = False
      shape = rectangle
      size = (9, 3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = deg
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    TextComponent text_same_inter_grey
      letterHeight = 1.4
      pos = (8, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Samma
      units = deg
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    TextComponent text_different_inter_grey
      letterHeight = 1.4
      pos = (-8, 0.0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Olika
      units = deg
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  Routine end_screen
    TextComponent text_end
      color = black
      letterHeight = 1.5
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      units = deg
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      text:
        Nu är testet klart.

        Vänligen vänta tills testledaren kommer tillbaka.
Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = specifications_csv/smdt_specifications.csv
    loopType = random
    nReps = 1
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    Routine trial
    Routine inter_trial_highlighted
    Routine inter_trial_grey
  LoopTerminator trials
  Routine end_screen
